PsychoPy2experiment version="2020.2.8"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = DecodingEmotions
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Routines
  Routine Distraction
    TextComponent Distraction_text
      color = red
      letterHeight = 0.1
      startVal [time (s)] = 1
      stopVal [duration (s)] = $distraction_time
      text [set every repeat] = Continously subtract 7 from the number on the screen and say the number out loud each time until a task is presented.
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    ParallelOutComponent distraction_start
      address = 0x0378
      disabled = True
      startData = 1
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 1.0
      syncScreen = True
      syncScreenRefresh = False
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  Routine Retrival
    TextComponent Word_cue
      color = red
      letterHeight = 0.1
      startVal [time (s)] = 1
      stopVal [duration (s)] = 3
      text [set every repeat] = $word
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    ParallelOutComponent word_cue_start
      address = 0x0378
      disabled = True
      startData = 1
      startVal [time (s)] = 1
      stopData = 0
      stopVal [duration (s)] = 1.0
      syncScreen = True
      syncScreenRefresh = False
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  Routine Training
    TextComponent text
      color = red
      letterHeight = 0.1
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 2.5
      text [set every repeat] = $word
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    ImageComponent image
      image [set every repeat] = $imageFromFolder
      size = (0.5, 0.5)
      startVal [time (s)] = 4.5
      stopVal [duration (s)] = 2.5
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    ImageComponent image2
      image [set every repeat] = $imageFromFolder
      size = (0.5, 0.5)
      startVal [time (s)] = 8
      stopVal [duration (s)] = 2.5
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    TextComponent text2
      color = red
      letterHeight = 0.1
      startVal [time (s)] = 8
      stopVal [duration (s)] = 2.5
      text [set every repeat] = $word
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    TextComponent text_2
      color = red
      letterHeight = 0.1
      startVal [time (s)] = 12
      stopVal [duration (s)] = 3
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      text:
        You have 5 seconds rest.

        Try to blink here and not during the learning phase
    ParallelOutComponent word_start
      address = 0x0378
      disabled = True
      startData = 1
      startVal [time (s)] = 1.0
      stopData = 0
      stopVal [duration (s)] = 1.0
      syncScreen = True
      syncScreenRefresh = False
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    ParallelOutComponent image_start
      address = 0x0378
      disabled = True
      startData = 1
      startVal [time (s)] = 4.5
      stopData = 0
      stopVal [duration (s)] = 1.0
      syncScreen = True
      syncScreenRefresh = False
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    ParallelOutComponent image_word_start
      address = 0x0378
      disabled = True
      startData = 1
      startVal [time (s)] = 8
      stopData = 0
      stopVal [duration (s)] = 1.0
      syncScreen = True
      syncScreenRefresh = False
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  Routine Instructions_for_retrival
    TextComponent Instructions
      color = red
      letterHeight = 0.1
      startVal [time (s)] = 1
      stopVal [duration (s)] = $instruction_time
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      text:
        Get ready for next task!

        You will be presented with a word.

        Try to remember the image shown in conjugtion to it.

        After a small time for each word you will be able to choose if the word was positive negative or neutral and if it was a face or a scene.
  Routine Instructions_for_training
    TextComponent instructions_for_training
      color = Red
      letterHeight = 0.1
      startVal [time (s)] = 1
      stopVal [duration (s)] = $time_instructions_training
      text = You will see words and images. Remember the images connected to each word.
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  Routine Question
    TextComponent Q1
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [condition] = key_resp_1
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      text:
        What was the emotional value of the image?

        (1) Positive
        (2) Neutral
        (3) Negative
        (4) Unsure
    KeyboardComponent key_resp_1
      allowedKeys = '1','2','3','4','5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1000
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  Routine Question_2
    TextComponent Q_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [condition] = key_resp
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      text:
        What was the schematic context of the image?

        (1) Face
        (2) Place
        (3) Unsure
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        which_q_first = bool(random.getrandbits(1))
        if which_q_first:
            continueRoutine = False
    KeyboardComponent key_resp
      allowedKeys = '1','2','3'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Question_2_other_way
    TextComponent Q2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [condition] = key_resp1
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      text:
        What was the schematic context of the image?

        (1) Face
        (2) Place
        (3) Unsure
    KeyboardComponent key_resp2
      allowedKeys = '1','2','3'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Experiment:
        if not which_q_first:
            continueRoutine = False
  Routine question1_other_way
    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Experiment:
        if not which_q_first:
            continueRoutine = False
    TextComponent Q1V2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [condition] = key_resp_2
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      text:
        What was the emotional value of the image?

        (1) Positive
        (2) Neutral
        (3) Negative
        (4) Unsure
    KeyboardComponent key_resp_2
      allowedKeys = '1','2','3','4'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Last_Q
Flow
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = cond_batch_def.csv
    loopType = sequential
    nReps = 2
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    conditions:
      [OrderedDict([('batch_start', 0), ('batch_end', 2)]),
      OrderedDict([('batch_start', 2), ('batch_end', 3)])]
    Routine Instructions_for_training
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $conditionFile
      loopType = random
      nReps = 1
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      Routine Training
    LoopTerminator trials
    Routine Distraction
    Routine Instructions_for_retrival
    LoopInitiator trials_2 loopType="TrialHandler"
      conditionsFile = $conditionFile
      loopType = random
      nReps = 1
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      Routine Retrival
      Routine Question
      Routine Question_2
      Routine Last_Q
    LoopTerminator trials_2
  LoopTerminator trials_3
